PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '999', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0,0,0]
  colorSpace = dkl
  expName = rumination_state_task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome_screen
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome, the task is about to start. Please follow the instructions from the researcher, thank you.
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    KeyboardComponent key_resp_welcome
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine emotional_level
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    TextComponent rate_emotion_prompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Please use a number to indicate your current feeling:
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    SliderComponent slider_emotion
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "very unhappy", "", "", "", "neutral", "", "", "", "very happy"
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_emotion
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_emotion.markerPos = 5
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if '1' in keys:
                slider_emotion.markerPos = slider_emotion.markerPos - 1
            elif '2' in keys:
                slider_emotion.markerPos = slider_emotion.markerPos  + 1
      End Routine:
        thisExp.addData("Rating", slider_emotion.markerPos)
    KeyboardComponent key_resp_emotion
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait4trigger_scanner
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    TextComponent wait4trigger_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait for the scanner to initiate.
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    KeyboardComponent scanner_trigger
      allowedKeys = 'S', 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fake_stimulus
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    TextComponent fake_stimulus_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Please wait for the scanner to initiate.
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  Routine resting
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    TextComponent fixation
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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  Routine think_content
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    TextComponent main_body_questionnaire
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = During the MRI my thoughts:
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    TextComponent item_text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_thinking_content
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "never", "", "", "", "sometimes", "", "", "", "always"
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_thinking_content
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_thinking_content.markerPos = 5
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if '1' in keys:
                slider_thinking_content.markerPos = slider_thinking_content.markerPos - 1
            elif '2' in keys:
                slider_thinking_content.markerPos = slider_thinking_content.markerPos  + 1
      End Routine:
        thisExp.addData("Rating", slider_thinking_content.markerPos)
    KeyboardComponent key_resp_thinking_content
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you. The current session is over, please wait for the researcher's instructions.
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    KeyboardComponent key_resp_goodbye
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine refresh
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    TextComponent text_refresh
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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Flow
  Routine welcome_screen
  Routine refresh
  Routine emotional_level
  Routine refresh
  Routine wait4trigger_scanner
  Routine fake_stimulus
  Routine resting
  Routine refresh
  Routine emotional_level
  Routine refresh
  LoopInitiator think_content_loop loopType="TrialHandler"
    conditionsFile = think_ontent_condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Item': 'were about the past', 'Number': 1},
      {'Item': 'were about the future', 'Number': 2},
      {'Item': 'were about myself', 'Number': 3},
      {'Item': 'were about others', 'Number': 4},
      {'Item': 'were positive', 'Number': 5},
      {'Item': 'were negative', 'Number': 6},
      {'Item': 'were in the form of images', 'Number': 7},
      {'Item': 'were in the form of words', 'Number': 8},
      {'Item': 'made me feel happy', 'Number': 9},
      {'Item': 'made me feel sad', 'Number': 10}]
    Routine think_content
    Routine refresh
  LoopTerminator think_content_loop
  Routine goodbye
